CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:CZIfiles
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:CZIfiles
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:2
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    Image name:OrigRedCZI
    Channel number:4
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    Image name:OrigBlueCZI
    Channel number:3
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    Image name:OrigGreenCZI
    Channel number:1
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    Image name:OrigWhiteCZI

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigBlueCZI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskImage:[module_num:7|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
    Select the input image:OrigBlueCZI
    Name the output image:MaskBlue
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:OrigRedCZI
    Name the primary objects to be identified:casp3
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

MaskImage:[module_num:9|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
    Select the input image:OrigRedCZI
    Name the output image:MaskRed
    Use objects or an image as a mask?:Objects
    Select object for mask:casp3
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    Invert the mask?:No

RelateObjects:[module_num:10|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
    Parent objects:Nuclei
    Child objects:casp3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relatecasp3_Nuclei
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:OrigGreenCZI
    Name the primary objects to be identified:b3tub
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MaskImage:[module_num:12|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
    Select the input image:OrigGreenCZI
    Name the output image:MaskGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:b3tub
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    Invert the mask?:No

RelateObjects:[module_num:13|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
    Parent objects:b3tub
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relateb3tub_nuclei
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
RelateObjects:[module_num:14|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
    Parent objects:Relateb3tub_nuclei
    Child objects:casp3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relateb3tub_casp3
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
IdentifyPrimaryObjects:[module_num:15|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enabled:False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
    Select the input image:OrigWhiteCZI
    Name the primary objects to be identified:Sox10
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MaskImage:[module_num:16|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enabled:False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
    Select the input image:OrigWhiteCZI
    Name the output image:MaskWhite
    Use objects or an image as a mask?:Objects
    Select object for mask:Sox10
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    Invert the mask?:No

RelateObjects:[module_num:17|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enabled:False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
    Parent objects:Sox10
    Child objects:casp3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateSox10_casp3
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
FlagImage:[module_num:18|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enabled:False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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_synapses
    Flag images based on low values?:Yes
    Minimum value:50
    Flag images based on high values?:No
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
ExportToSpreadsheet:[module_num:19|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive\\Desktop\\SARS COV2\\data\\images
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Relateb3tub_casp3|Location_Center_Y,Relateb3tub_casp3|Location_Center_X,Relateb3tub_casp3|Location_Center_Z,Relateb3tub_casp3|Number_Object_Number,Relateb3tub_casp3|Parent_casp3,Image|Count_casp3,Image|Count_Relatecasp3_Nuclei,Image|Count_Relateb3tub_nuclei,Image|Count_Relateb3tub_casp3,Image|Count_Nuclei,Image|Count_b3tub,Image|MD5Digest_CZIfiles,Image|ExecutionTime_07MaskImage,Image|ExecutionTime_01Images,Image|ExecutionTime_04Groups,Image|ExecutionTime_10RelateObjects,Image|ExecutionTime_08IdentifyPrimaryObjects,Image|ExecutionTime_02Metadata,Image|ExecutionTime_13RelateObjects,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
